PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, data.getDateStr())
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Save psydat file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  color = [-0.86, -0.84, -0.78]
  expName = stroop_go_nogo_ptbr
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine boas_vindas
    RoutineSettingsComponent boas_vindas
      color = $[-0.86, -0.84, -0.78]
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    TextComponent boas_vindas_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Teste de Atenção e Inibição
      wrapWidth = 1.25
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    TextComponent boas_vindas_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      text = Uma tarefa breve para medir velocidade e controle de resposta.
      wrapWidth = 1.18
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    TextComponent boas_vindas_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent boas_vindas_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_boas_vindas
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent formulario_sessao
      Code Type = Py
      Before Experiment:
        from psychopy import gui, core
        from datetime import datetime
        import re
        import uuid

        TEST_CODE = 'stroop_go_nogo_ptbr'
        TEST_VERSION = '0.1.0'
        PARTICIPANT_ID_PATTERN = re.compile(r'^[A-Za-z0-9_-]{2,64}$')

        _session_values = {
            'project': '',
            'participant_id': '',
            'initials': '',
            'visit': '',
            'evaluator': '',
        }
        _session_error = ''

        while True:
            session_dlg = gui.Dlg(
                title='Dados da sessão',
                labelButtonOK='Iniciar tarefa',
                labelButtonCancel='Cancelar',
            )
            session_dlg.addText('Preencha os dados da execução.')
            session_dlg.addText('A data e a hora da avaliação são registradas automaticamente.')
            if _session_error:
                session_dlg.addText(_session_error, color='red')
            session_dlg.addField('Projeto', _session_values['project'])
            session_dlg.addField('ID do participante', _session_values['participant_id'])
            session_dlg.addField('Iniciais (opcional)', _session_values['initials'])
            session_dlg.addField('Visita', _session_values['visit'])
            session_dlg.addField('Avaliador(a)', _session_values['evaluator'])
            dlg_values = session_dlg.show()

            if not session_dlg.OK:
                core.quit()

            keys = ['project', 'participant_id', 'initials', 'visit', 'evaluator']
            labels = ['Projeto', 'ID do participante', 'Iniciais (opcional)', 'Visita', 'Avaliador(a)']
            if isinstance(dlg_values, dict):
                raw_values = {key: dlg_values.get(label, '') for key, label in zip(keys, labels)}
            else:
                if dlg_values is None:
                    dlg_values = getattr(session_dlg, 'data', [])
                raw_values = {key: value for key, value in zip(keys, dlg_values)}
            _session_values = {key: str(raw_values.get(key, '')).strip() for key in keys}
            validation_errors = []

            if not _session_values['project']:
                validation_errors.append('Informe o projeto.')
            if not _session_values['participant_id']:
                validation_errors.append('Informe o ID do participante.')
            elif not PARTICIPANT_ID_PATTERN.match(_session_values['participant_id']):
                validation_errors.append('ID do participante: use 2 a 64 caracteres, apenas letras, números, hífen e sublinhado.')
            if not _session_values['visit']:
                validation_errors.append('Informe a visita.')
            if not _session_values['evaluator']:
                validation_errors.append('Informe o avaliador(a).')

            if not validation_errors:
                break

            _session_error = 'Corrija os campos: ' + ' '.join(validation_errors)

        _started_at = datetime.now().astimezone().replace(microsecond=0)
        expInfo.clear()
        expInfo.update(_session_values)
        expInfo['assessment_id'] = str(uuid.uuid4())
        expInfo['assessment_date'] = _started_at.date().isoformat()
        expInfo['started_at'] = _started_at.isoformat()
        expInfo['test_code'] = TEST_CODE
        expInfo['test_version'] = TEST_VERSION
  Routine instr_regra
    RoutineSettingsComponent instr_regra
      color = $[-0.86, -0.84, -0.78]
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    TextComponent instr_regra_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Regra principal
      wrapWidth = 1.25
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    TextComponent instr_regra_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Pressione ESPAÇO quando a palavra estiver escrita na cor correspondente.
        Não pressione nada quando a palavra estiver escrita em outra cor.
    TextComponent instr_regra_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent instr_regra_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_instr_regra
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr_congruente
    RoutineSettingsComponent instr_congruente
      color = $[-0.86, -0.84, -0.78]
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    TextComponent instr_congruente_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Quando combinar, responda
      wrapWidth = 1.25
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    TextComponent instr_congruente_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Exemplo: a palavra abaixo combina com a cor.
        Pressione ESPAÇO.
    TextComponent exemplo_congruente_word
      color = [-1, 1, -1]
      height = 0.095
      letterHeight = 0.095
      pos = [0, -0.09]
      startVal [time (s)] = 0
      text = VERDE
      wrapWidth = 1.0
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    TextComponent instr_congruente_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent instr_congruente_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_instr_congruente
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instr_incongruente
    RoutineSettingsComponent instr_incongruente
      color = $[-0.86, -0.84, -0.78]
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    TextComponent instr_incongruente_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Quando não combinar, iniba
      wrapWidth = 1.25
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    TextComponent instr_incongruente_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Exemplo: a palavra abaixo não combina com a cor.
        Não pressione nenhuma tecla.
    TextComponent exemplo_incongruente_word
      color = [-1, -1, 1]
      height = 0.095
      letterHeight = 0.095
      pos = [0, -0.09]
      startVal [time (s)] = 0
      text = VERMELHO
      wrapWidth = 1.0
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    TextComponent instr_incongruente_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent instr_incongruente_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_instr_incongruente
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine contagem
    RoutineSettingsComponent contagem
      color = $[-0.86, -0.84, -0.78]
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    TextComponent contagem_texto
      height = 0.09
      letterHeight = 0.09
      pos = [0, 0.02]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
      text [set every repeat] = $countdown_text
      wrapWidth = 1.0
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    TextComponent contagem_hint
      color = lightgray
      height = 0.03
      letterHeight = 0.03
      pos = [0, -0.18]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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  Routine trial_pratica
    RoutineSettingsComponent trial_pratica
      color = $[-0.86, -0.84, -0.78]
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    CodeComponent codigo_pratica
      Code Type = Auto->JS
      Before Experiment:
        from psychopy import event, core
        trial_clock = core.Clock()
      Begin Routine:
        event.clearEvents(eventType='keyboard')
        key_pressed = ''
        reaction_time = ''
        correct = 0
        error_type = ''
        feedback_text = ''
        block = 'practice'
      End Routine:
        key_pressed = ''
        reaction_time = ''
        if resp_pratica.keys not in [None, '', []]:
            key_pressed = resp_pratica.keys[0] if isinstance(resp_pratica.keys, list) else resp_pratica.keys
            if resp_pratica.rt not in [None, '', []]:
                reaction_time = resp_pratica.rt[0] if isinstance(resp_pratica.rt, list) else resp_pratica.rt
        go_trial = correct_response == 'space'
        if go_trial and key_pressed == 'space':
            correct = 1
            error_type = 'hit'
            feedback_text = '✓ Correto'
        elif go_trial:
            correct = 0
            error_type = 'omission'
            feedback_text = 'Pressione ESPAÇO quando a cor combina'
        elif key_pressed == 'space':
            correct = 0
            error_type = 'commission'
            feedback_text = 'Não responda quando a cor não combina'
        else:
            correct = 1
            error_type = 'correct_rejection'
            feedback_text = '✓ Correto'
        for data_target in [thisExp, pratica_loop]:
            data_target.addData('project', expInfo['project'])
            data_target.addData('participant_id', expInfo['participant_id'])
            data_target.addData('initials', expInfo['initials'])
            data_target.addData('visit', expInfo['visit'])
            data_target.addData('evaluator', expInfo['evaluator'])
            data_target.addData('assessment_id', expInfo['assessment_id'])
            data_target.addData('assessment_date', expInfo['assessment_date'])
            data_target.addData('started_at', expInfo['started_at'])
            data_target.addData('test_code', expInfo['test_code'])
            data_target.addData('test_version', expInfo['test_version'])
            data_target.addData('block', block)
            data_target.addData('trial_number', trial_number)
            data_target.addData('word', word)
            data_target.addData('ink_color', ink_color)
            data_target.addData('condition', condition)
            data_target.addData('correct_response', correct_response)
            data_target.addData('key_pressed', key_pressed)
            data_target.addData('reaction_time', reaction_time)
            data_target.addData('correct', correct)
            data_target.addData('error_type', error_type)
    KeyboardComponent resp_pratica
      allowedKeys = 'space'
      correctAns [set every repeat] = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    TextComponent fix_pratica
      color = lightgray
      height = 0.06
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      text = +
      wrapWidth = 0.4
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    TextComponent stim_pratica
      color [set every repeat] = $ink_color
      height = 0.12
      letterHeight = 0.12
      pos = [0, 0.02]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
      wrapWidth = 1.0
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    TextComponent lembrete_pratica
      color = lightgray
      height = 0.028
      letterHeight = 0.028
      pos = [0, -0.20]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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    TextComponent hold_pratica
      color = [-0.86, -0.84, -0.78]
      height = 0.001
      letterHeight = 0.001
      pos = [0, -0.45]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
      text = .
      wrapWidth = 0.1
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  Routine feedback_pratica
    RoutineSettingsComponent feedback_pratica
      color = $[-0.86, -0.84, -0.78]
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    TextComponent texto_feedback
      height = 0.052
      letterHeight = 0.052
      pos = [0, 0.02]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_text
      wrapWidth = 1.15
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  Routine resumo_pratica
    RoutineSettingsComponent resumo_pratica
      color = $[-0.86, -0.84, -0.78]
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    TextComponent resumo_pratica_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Prática concluída
      wrapWidth = 1.25
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    TextComponent resumo_pratica_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Agora começa a tarefa principal.
        A regra continua a mesma e não havera feedback.
    TextComponent resumo_pratica_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent resumo_pratica_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_resumo_pratica
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial_principal
    RoutineSettingsComponent trial_principal
      color = $[-0.86, -0.84, -0.78]
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    CodeComponent codigo_principal
      Code Type = Auto->JS
      Begin Routine:
        event.clearEvents(eventType='keyboard')
        key_pressed = ''
        reaction_time = ''
        correct = 0
        error_type = ''
        block = 'main'
        try:
            total_main_trials = len(principal_loop.trialList)
            current_main_trial = principal_loop.thisN + 1
        except Exception:
            total_main_trials = '?'
            current_main_trial = '?'
        progress_text = f'Bloco principal - tentativa {current_main_trial} de {total_main_trials}'
      End Routine:
        key_pressed = ''
        reaction_time = ''
        if resp_principal.keys not in [None, '', []]:
            key_pressed = resp_principal.keys[0] if isinstance(resp_principal.keys, list) else resp_principal.keys
            if resp_principal.rt not in [None, '', []]:
                reaction_time = resp_principal.rt[0] if isinstance(resp_principal.rt, list) else resp_principal.rt
        go_trial = correct_response == 'space'
        if go_trial and key_pressed == 'space':
            correct = 1
            error_type = 'hit'
        elif go_trial:
            correct = 0
            error_type = 'omission'
        elif key_pressed == 'space':
            correct = 0
            error_type = 'commission'
        else:
            correct = 1
            error_type = 'correct_rejection'
        for data_target in [thisExp, principal_loop]:
            data_target.addData('project', expInfo['project'])
            data_target.addData('participant_id', expInfo['participant_id'])
            data_target.addData('initials', expInfo['initials'])
            data_target.addData('visit', expInfo['visit'])
            data_target.addData('evaluator', expInfo['evaluator'])
            data_target.addData('assessment_id', expInfo['assessment_id'])
            data_target.addData('assessment_date', expInfo['assessment_date'])
            data_target.addData('started_at', expInfo['started_at'])
            data_target.addData('test_code', expInfo['test_code'])
            data_target.addData('test_version', expInfo['test_version'])
            data_target.addData('block', block)
            data_target.addData('trial_number', trial_number)
            data_target.addData('word', word)
            data_target.addData('ink_color', ink_color)
            data_target.addData('condition', condition)
            data_target.addData('correct_response', correct_response)
            data_target.addData('key_pressed', key_pressed)
            data_target.addData('reaction_time', reaction_time)
            data_target.addData('correct', correct)
            data_target.addData('error_type', error_type)
    KeyboardComponent resp_principal
      allowedKeys = 'space'
      correctAns [set every repeat] = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    TextComponent progresso_principal
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, 0.35]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
      text [set every repeat] = $progress_text
      wrapWidth = 1.2
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    TextComponent fix_principal
      color = lightgray
      height = 0.06
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      text = +
      wrapWidth = 0.4
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    TextComponent stim_principal
      color [set every repeat] = $ink_color
      height = 0.12
      letterHeight = 0.12
      pos = [0, 0.02]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word
      wrapWidth = 1.0
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    TextComponent lembrete_principal
      color = lightgray
      height = 0.028
      letterHeight = 0.028
      pos = [0, -0.20]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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    TextComponent hold_principal
      color = [-0.86, -0.84, -0.78]
      height = 0.001
      letterHeight = 0.001
      pos = [0, -0.45]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.3
      text = .
      wrapWidth = 0.1
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  Routine fim
    RoutineSettingsComponent fim
      color = $[-0.86, -0.84, -0.78]
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    TextComponent fim_title
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Teste concluído.
      wrapWidth = 1.25
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    TextComponent fim_body
      color = lightgray
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      text = Obrigado pela participação.
      wrapWidth = 1.18
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    TextComponent fim_key
      color = lightblue
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent fim_hint
      color = lightgray
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_fim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine boas_vindas
  Routine instr_regra
  Routine instr_congruente
  Routine instr_incongruente
  LoopInitiator contagem_pratica_loop loopType="TrialHandler"
    conditions = condicoes/contagem_regressiva.csv
    conditionsFile = condicoes/contagem_regressiva.csv
    isTrials = False
    loopType = sequential
    method = sequential
    nReps = 1
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    Routine contagem
  LoopTerminator contagem_pratica_loop
  LoopInitiator pratica_loop loopType="TrialHandler"
    conditions = condicoes/pratica_stroop_go_nogo_ptbr.csv
    conditionsFile = condicoes/pratica_stroop_go_nogo_ptbr.csv
    loopType = random
    method = random
    nReps = 1
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    Routine trial_pratica
    Routine feedback_pratica
  LoopTerminator pratica_loop
  Routine resumo_pratica
  LoopInitiator contagem_principal_loop loopType="TrialHandler"
    conditions = condicoes/contagem_regressiva.csv
    conditionsFile = condicoes/contagem_regressiva.csv
    isTrials = False
    loopType = sequential
    method = sequential
    nReps = 1
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    Routine contagem
  LoopTerminator contagem_principal_loop
  LoopInitiator principal_loop loopType="TrialHandler"
    conditions = condicoes/bloco_principal_stroop_go_nogo_ptbr.csv
    conditionsFile = condicoes/bloco_principal_stroop_go_nogo_ptbr.csv
    loopType = random
    method = random
    nReps = 1
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    Routine trial_principal
  LoopTerminator principal_loop
  Routine fim
